CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:38
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Patient>(.*?[^\\\\.]+)).(?P<Tile>(X*[0-9]*.Y*[0-9]*))
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_nuclei")
    Name to assign these images:nuclei
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_positives")
    Name to assign these images:positives
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "tile.tissue.")
    Name to assign these images:original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
FlagImage:[module_num:5|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
    Hidden:1
    Hidden:6
    Name the flag's category:Metadata
    Name the flag:Flag_size
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Height_nuclei
    Flag images based on low values?:Yes
    Minimum value:2000.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Width_nuclei
    Flag images based on low values?:Yes
    Minimum value:2000.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Height_positives
    Flag images based on low values?:Yes
    Minimum value:2000.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Width_positives
    Flag images based on low values?:Yes
    Minimum value:2000.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Height_original
    Flag images based on low values?:Yes
    Minimum value:2000.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:Width_original
    Flag images based on low values?:Yes
    Minimum value:2000.0
    Flag images based on high values?:No
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
ColorToGray:[module_num:6|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
    Select the input image:nuclei
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:nucleiRed
    Convert green to gray?:Yes
    Name the output image:nucleiGreen
    Convert blue to gray?:Yes
    Name the output image:nucleiBlue
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
Threshold:[module_num:7|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
    Select the input image:nucleiRed
    Name the output image:nucleiRedThreshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.6
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
Threshold:[module_num:8|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
    Select the input image:nucleiBlue
    Name the output image:nucleiBlueThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
Threshold:[module_num:9|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
    Select the input image:nucleiGreen
    Name the output image:nucleiGreenThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureImageAreaOccupied:[module_num:10|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:nucleiRedThreshold
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:nucleiBlueThreshold
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:nucleiGreenThreshold

FlagImage:[module_num:11|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
    Hidden:1
    Hidden:2
    Name the flag's category:Metadata
    Name the flag:Flag_background
    How should measurements be linked?:Flag if all fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:AreaOccupied_AreaOccupied_nucleiRedThreshold
    Flag images based on low values?:Yes
    Minimum value:5.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:AreaOccupied_AreaOccupied_nucleiBlueThreshold
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:3800000
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
RemoveHoles:[module_num:12|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
    Select the input image:nucleiRedThreshold
    Name the output image:ClosedNuclei
    Size:5

MaskImage:[module_num:13|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
    Select the input image:nucleiRed
    Name the output image:nucleiRedMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:ClosedNuclei
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:nucleiRedMasked
    Name the primary objects to be identified:DetectedNuclei
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:15|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
    Select the input objects:DetectedNuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Add partial dividing lines between objects
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
ExpandOrShrinkObjects:[module_num:16|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
    Select the input objects:ShrunkenNuclei
    Name the output objects:ShrunkenNuclei2
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
    Fill holes in objects so that all objects shrink to a single point?:Yes

ExpandOrShrinkObjects:[module_num:17|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
    Select the input objects:ShrunkenNuclei2
    Name the output objects:ShrunkenNuclei3
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:original
    Name the output image:OrigOverlayNuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:ShrunkenNuclei3

ColorToGray:[module_num:19|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
    Select the input image:positives
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:positivesRed
    Convert green to gray?:Yes
    Name the output image:positivesGreen
    Convert blue to gray?:Yes
    Name the output image:positivesBlue
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
Threshold:[module_num:20|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
    Select the input image:positivesRed
    Name the output image:positivesRedThreshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.75
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
Threshold:[module_num:21|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
    Select the input image:positivesGreen
    Name the output image:positivesGreenThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
Threshold:[module_num:22|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
    Select the input image:positivesBlue
    Name the output image:positivesBlueThreshold
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureImageAreaOccupied:[module_num:23|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:positivesRedThreshold
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:positivesGreenThreshold
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Select a binary image to measure:positivesBlueThreshold

Closing:[module_num:24|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
    Select the input image:positivesRedThreshold
    Name the output image:ClosingPositives
    Structuring element:disk,1

Watershed:[module_num:25|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
    Select the input image:ClosingPositives
    Name the output object:WatershedPositives
    Generate from:Markers
    Markers:ClosingPositives
    Mask:ClosingPositives
    Connectivity:8
    Downsample:1

MeasureObjectSizeShape:[module_num:26|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
    Select objects to measure:WatershedPositives
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:27|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
    Select the objects to filter:WatershedPositives
    Name the output objects:FilteredPositives
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_MinFeretDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:5
    Filter using a maximum measurement value?:Yes
    Maximum value:100

ExpandOrShrinkObjects:[module_num:28|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
    Select the input objects:FilteredPositives
    Name the output objects:ShrunkenPositives
    Select the operation:Add partial dividing lines between objects
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
ConvertObjectsToImage:[module_num:29|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
    Select the input objects:ShrunkenPositives
    Name the output image:PossiblePositivesImage
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:30|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
    Select the input image:PossiblePositivesImage
    Name the primary objects to be identified:DetectedPositives
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
OverlayOutlines:[module_num:31|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigOverlayNuclei
    Name the output image:OrigOverlayAll
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00FF40
    Select objects to display:DetectedPositives

MeasureObjectOverlap:[module_num:32|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:DetectedNuclei
    Select the objects to be tested for overlap against the ground truth:DetectedPositives
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

ConvertObjectsToImage:[module_num:33|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
    Select the input objects:DetectedNuclei
    Name the output image:DetectedNucleiImage
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:34|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
    Select the input objects:DetectedPositives
    Name the output image:DetectedPositivesImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:35|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
    Operation:And
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageOfCommonObjects
    Image or measurement?:Image
    Select the first image:DetectedNucleiImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:PossiblePositivesImage
    Multiply the second image by:1.0
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
ConvertImageToObjects:[module_num:36|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
    Select the input image:ImageOfCommonObjects
    Name the output object:CommonObjects

SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayAll
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.overlay
    Saved file format:tiff
    Output file location:Default Output Folder|Desktop\\\\\\\\lung\\\\\\\\results_old pipe
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:38|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\\\\\\\lung\\\\\\\\results_old pipe
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:DetectedNuclei|Number_Object_Number,DetectedNuclei|Location_Center_Y,DetectedNuclei|Location_Center_X,DetectedNuclei|Location_Center_Z,DetectedPositives|Number_Object_Number,DetectedPositives|Location_Center_Y,DetectedPositives|Location_Center_X,DetectedPositives|Location_Center_Z,Image|Count_DetectedNuclei,Image|Count_DetectedPositives,Image|Count_CommonObjects,Image|AreaOccupied_Perimeter_positivesRedThreshold,Image|AreaOccupied_Perimeter_nucleiBlueThreshold,Image|AreaOccupied_Perimeter_positivesBlueThreshold,Image|AreaOccupied_Perimeter_nucleiRedThreshold,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ResultsVanderbilt001_
    Overwrite existing files without warning?:No
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